CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:11
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "atf6")
    Name to assign these images:atf6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "bt")
    Name to assign these images:bt
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "cona")
    Name to assign these images:cona
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "g4")
    Name to assign these images:g4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "hsp60")
    Name to assign these images:hsp60
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "nuc")
    Name to assign these images:nuc
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ph")
    Name to assign these images:ph
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "sor")
    Name to assign these images:sor
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "t20")
    Name to assign these images:t20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "wga")
    Name to assign these images:wga
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:dapi
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):100,1500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.5
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nucleus
    Name the objects to be identified:bt_objects
    Select the method to identify the secondary objects:Propagation
    Select the input image:bt
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nucleus
    Name the objects to be identified:atf6_objects
    Select the method to identify the secondary objects:Propagation
    Select the input image:atf6
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Nucleus
    Name the objects to be identified:cona_objects
    Select the method to identify the secondary objects:Propagation
    Select the input image:cona
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:.9
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nucleus
    Name the objects to be identified:g4_objects
    Select the method to identify the secondary objects:Propagation
    Select the input image:g4
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nucleus
    Name the objects to be identified:ph_objects
    Select the method to identify the secondary objects:Propagation
    Select the input image:ph
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nucleus
    Name the objects to be identified:hsp60_objects
    Select the method to identify the secondary objects:Propagation
    Select the input image:hsp60
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nucleus
    Name the objects to be identified:t20_objects
    Select the method to identify the secondary objects:Propagation
    Select the input image:t20
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:13|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
    Select the input objects:Nucleus
    Name the objects to be identified:sor_objects
    Select the method to identify the secondary objects:Propagation
    Select the input image:sor
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:Nucleus
    Name the objects to be identified:wga_objects
    Select the method to identify the secondary objects:Propagation
    Select the input image:wga
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:nuc
    Name the primary objects to be identified:nuc_object
    Typical diameter of objects, in pixel units (Min,Max):20,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:4.5
    Lower and upper bounds on threshold:0.0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:16|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
    Select the larger identified objects:atf6_objects
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_atf6
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:17|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
    Select the larger identified objects:bt_objects
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_bt
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:18|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
    Select the larger identified objects:cona_objects
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_cona
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:19|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
    Select the larger identified objects:g4_objects
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_g4
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:20|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
    Select the larger identified objects:hsp60_objects
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_hsp60
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:21|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
    Select the larger identified objects:ph_objects
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_ph
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:22|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
    Select the larger identified objects:sor_objects
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_sor
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:23|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
    Select the larger identified objects:t20_objects
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_t20
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:24|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
    Select the larger identified objects:wga_objects
    Select the smaller identified objects:Nucleus
    Name the tertiary objects to be identified:Cytoplasm_wga
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:Cytoplasm_atf6, Cytoplasm_bt, Cytoplasm_cona, Cytoplasm_g4, Cytoplasm_hsp60, Cytoplasm_ph, Cytoplasm_sor, Cytoplasm_t20, Cytoplasm_wga, atf6_objects, bt_objects, cona_objects, g4_objects, hsp60_objects, nuc_object, ph_objects, sor_objects, t20_objects, wga_objects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:atf6, bt, cona, dapi, g4, hsp60, nuc, ph, sor, t20, wga
    Select objects to measure:Cytoplasm_atf6, Cytoplasm_bt, Cytoplasm_cona, Cytoplasm_g4, Cytoplasm_hsp60, Cytoplasm_ph, Cytoplasm_sor, Cytoplasm_t20, Cytoplasm_wga, atf6_objects, bt_objects, cona_objects, g4_objects, hsp60_objects, nuc_object, ph_objects, sor_objects, t20_objects, wga_objects

ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Users/yukinayajima/Desktop/Research/CellProfiler Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:result_
    Overwrite existing files without warning?:No
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